%define range_min = -9.5
%define range_max = 9.5

var output = 0
var input = 0

nidaq nidaq (
    name = Dev1
    update_interval = 3ms
    analog_input_data_interval = 1ms
    analog_output_data_interval = 1ms
    ) {
    nidaq_analog_output_voltage (
        channel_number = 0
        range_min = range_min
        range_max = range_max
        voltage = output
        )
    nidaq_analog_input_voltage (
        channel_number = 0
        range_min = range_min
        range_max = range_max
        voltage = input
        )
}


stimulus_display (
    background_color = 0.5, 0.5, 0.5
    redraw_on_every_refresh = true
    )


rectangle box (
    x_size = 1
    x_position = input
    )


protocol {
    output = 0
    start_device_io (nidaq)

    live_queue_stimulus (box)
    update_stimulus_display ()

    list (nsamples = 5) {
        wait (2s)
        assert (abs(input - output) < 0.005)
        output = rand(range_min, range_max)
    }

    wait (2s)

    dequeue_stimulus (box)
    update_stimulus_display ()

    stop_device_io (nidaq)
}
