<?xml version="1.0" standalone="no"?>
<monkeyml version="1.0">
    <io_devices tag="IO Devices">
        <iodevice type="nidaq" tag="nidaq" name="Dev1" update_interval="3ms" analog_input_data_interval="1ms" analog_output_data_interval="1ms" assume_multiplexed_adc="YES">
            <iochannel type="nidaq_analog_output_voltage_waveform" tag="ao0" channel_number="0" range_min="0" range_max="5" waveform="square" period="2s" offset="0ms"></iochannel>
            <iochannel type="nidaq_digital_input" tag="port1" port_number="1" line0="line0" line1="line1" line2="line2" line3="line3" line4="line4" line5="line5" line6="line6" line7="line7" line8="" line9="" line10="" line11="" line12="" line13="" line14="" line15="" line16="" line17="" line18="" line19="" line20="" line21="" line22="" line23="" line24="" line25="" line26="" line27="" line28="" line29="" line30="" line31=""></iochannel>
        </iodevice>
    </io_devices>
    <variables tag="Variables">
        <variable tag="line0" scope="global" logging="when_changed" default_value="0" type="integer">
            <action type="report" tag="Report" message="line0 = $line0"></action>
        </variable>
        <variable tag="line1" scope="global" logging="when_changed" default_value="0" type="integer">
            <action type="report" tag="Report" message="line1 = $line1"></action>
        </variable>
        <variable tag="line2" scope="global" logging="when_changed" default_value="0" type="integer">
            <action type="report" tag="Report" message="line2 = $line2"></action>
        </variable>
        <variable tag="line3" scope="global" logging="when_changed" default_value="0" type="integer">
            <action type="report" tag="Report" message="line3 = $line3"></action>
        </variable>
        <variable tag="line4" scope="global" logging="when_changed" default_value="0" type="integer">
            <action type="report" tag="Report" message="line4 = $line4"></action>
        </variable>
        <variable tag="line5" scope="global" logging="when_changed" default_value="0" type="integer">
            <action type="report" tag="Report" message="line5 = $line5"></action>
        </variable>
        <variable tag="line6" scope="global" logging="when_changed" default_value="0" type="integer">
            <action type="report" tag="Report" message="line6 = $line6"></action>
        </variable>
        <variable tag="line7" scope="global" logging="when_changed" default_value="0" type="integer">
            <action type="report" tag="Report" message="line7 = $line7"></action>
        </variable>
        <variable tag="done" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
    </variables>
    <sounds tag="Sounds"></sounds>
    <stimuli tag="Stimuli"></stimuli>
    <filters tag="Filters"></filters>
    <optimizers tag="Optimizers"></optimizers>
    <experiment tag="New Experiment" full_name="" description="">
        <protocol tag="New Protocol" nsamples="1" sampling_method="cycles" selection="sequential" interruptible="YES">
            <task_system tag="New Task System" interruptible="YES">
                <task_system_state tag="Begin State System" interruptible="YES">
                    <action_marker _unmoveable="1" tag="Actions"></action_marker>
                    <action type="assignment" tag="Reset done" variable="done" value="0"></action>
                    <action tag="Start IO Device" type="start_device_IO" device="nidaq"></action>
                    <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                    <transition type="conditional" tag="If Condition is True, Transition to ..." condition="done" target="Exit State System"></transition>
                </task_system_state>
                <task_system_state tag="Exit State System" interruptible="YES">
                    <action_marker _unmoveable="1" tag="Actions"></action_marker>
                    <action tag="Stop IO Device" type="stop_device_IO" device="nidaq"></action>
                    <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                    <transition tag="Return to parent task system" type="yield"></transition>
                </task_system_state>
            </task_system>
        </protocol>
    </experiment>
</monkeyml>